PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['姓名'], expName, expInfo['date'])
  Experiment info = {}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = mian
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Routines
  Routine num2Word
    ImageComponent frame
      image = frame.png
      saveStartStop = False
      size = (1.2, 1.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    TextComponent stimulus
      letterHeight = 0.1
      pos [set every repeat] = Position
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4.5
      text [set every repeat] = $target
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    KeyboardComponent respNum2word
      allowedKeys = 'a','l'
      correctAns = $CorAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4.5
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if respNum2word.corr:
            feedbacktext = "√"
            feedbackcolor = "green"
        else:
            feedbacktext = "×"
            feedbackcolor = "red"
  Routine feedback
    ImageComponent frame2
      image = frame.png
      saveStartStop = False
      size = (1.2, 1.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    TextComponent textFBNum
      color [set every repeat] = $feedbackcolor
      letterHeight = 0.1
      pos [set every repeat] = Position
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedbacktext
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  Routine inter
    ImageComponent frame3
      image = frame.png
      saveStartStop = False
      size = (1.2, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine endPracNum
    ImageComponent NumEndPrac
      image = pic\NumEndPrac.png
      saveStartStop = False
      size = (1.33, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent respEndNumP
      allowedKeys = 'q','p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if respEndNumP.keys == "p":
            returnPractice.finished = True # 循环结束
        else:
            returnPractice.finished = False
  Routine instrNum
    ImageComponent Numinstr_p
      image = pic\NumInstr.png
      saveStartStop = False
      size = (1.33, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent respNumPrac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine restNum
    ImageComponent NumRest
      image = pic\NumRest.png
      saveStartStop = False
      size = (1.33, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent respRest
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    ImageComponent Endexp
      image = pic\EndExp.PNG
      saveStartStop = False
      size = (1.33,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent respEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine GeneInstr
    ImageComponent GeneInstr_p
      image = pic\GenInstr.png
      saveStartStop = False
      size = (1.33, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine AFF_S2
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # 积极词表
        positiveWords = [
            "畅销", "诚恳", "充裕", "典雅",
            "丰满", "奉献", "富丽", "富足",
            "公平", "瑰丽", "豪放", "吉祥",
            "精致", "敬佩", "俊秀", "廉洁",
            "留恋", "前进", "清秀", "热切",
            "如愿", "生动", "圣洁", "舒畅",
            "爽朗", "顽强", "旺盛", "鲜艳",
            "羡慕", "享受", "雄厚", "秀丽",
            "永恒", "优雅", "有利", "赞成",
            "珍藏", "振作", "正直", "卓越"
        ]
        # 消极词表
        negativeWords = [
            "悲观", "别扭", "嘲笑", "处罚",
            "丢失", "堵塞", "罚款", "烦恼",
            "孤单", "黑暗", "胡涂", "怀疑",
            "慌忙", "假冒", "焦躁", "禁止",
            "沮丧", "懒惰", "浪费", "冷笑",
            "鲁莽", "落后", "闷热", "排斥",
            "轻率", "穷苦", "缺乏", "撒谎",
            "伤心", "失意", "损害", "逃避",
            "消沉", "心慌", "厌恶", "忧虑",
            "郁闷", "杂乱", "争吵", "自卑"
        ]
      End Routine:
        thisExp.addData("thisWord",thisWord)
    CodeComponent code_js
      Code Type = JS
      Begin JS Experiment:
        var thisWord, fixTime

        Array.prototype.removeByValue = function (val) {
          for (var i = 0; i < this.length; i++) {
            if (this[i] === val) {
              this.splice(i, 1);
              i--;
            }
          }
          return this;
        }
      Begin JS Routine:
        if ((AffValue === 1)) {
            thisWord = positiveWords[Math.floor(Math.random() * positiveWords.length)];
            positiveWords.removeByValue(thisWord);
        } else {
            thisWord = negativeWords[Math.floor(Math.random() * negativeWords.length)];
            negativeWords.removeByValue(thisWord);
        }
    TextComponent AffWord
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $thisWord
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    KeyboardComponent respAffWord
      allowedKeys = 'l','k'
      correctAns = $corAnsA
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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  Routine AFF_S1
    ImageComponent flanker_p
      image [set every repeat] = $flankerPic
      saveStartStop = False
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      units = height
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    ImageComponent target_p
      image [set every repeat] = $targetPic
      saveStartStop = False
      size = (0.8, 0.8)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      units = height
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    KeyboardComponent respFlanker
      allowedKeys = 'a','s'
      correctAns = $corAnsF
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine restAff
    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        # 积极词表
        positiveWords = [
            "畅销", "诚恳", "充裕", "典雅",
            "丰满", "奉献", "富丽", "富足",
            "公平", "瑰丽", "豪放", "吉祥",
            "精致", "敬佩", "俊秀", "廉洁",
            "留恋", "前进", "清秀", "热切",
            "如愿", "生动", "圣洁", "舒畅",
            "爽朗", "顽强", "旺盛", "鲜艳",
            "羡慕", "享受", "雄厚", "秀丽",
            "永恒", "优雅", "有利", "赞成",
            "珍藏", "振作", "正直", "卓越"
        ]
        # 消极词表
        negativeWords = [
            "悲观", "别扭", "嘲笑", "处罚",
            "丢失", "堵塞", "罚款", "烦恼",
            "孤单", "黑暗", "胡涂", "怀疑",
            "慌忙", "假冒", "焦躁", "禁止",
            "沮丧", "懒惰", "浪费", "冷笑",
            "鲁莽", "落后", "闷热", "排斥",
            "轻率", "穷苦", "缺乏", "撒谎",
            "伤心", "失意", "损害", "逃避",
            "消沉", "心慌", "厌恶", "忧虑",
            "郁闷", "杂乱", "争吵", "自卑"
        ]
    ImageComponent AffRest
      image [set every repeat] = $RestPic
      saveStartStop = False
      size = (1.33, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent respRest_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine AffInstr
    ImageComponent AffInsr_P
      image = pic\AffInstr.png
      saveStartStop = False
      size = (1.33, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent respAffInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine endPracAff
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if respEndPracA.keys == "p":
            returnPrac.finished = True # 循环结束
        else:
            returnPrac.finished = False

        positiveWords = [
            "畅销", "诚恳", "充裕", "典雅",
            "丰满", "奉献", "富丽", "富足",
            "公平", "瑰丽", "豪放", "吉祥",
            "精致", "敬佩", "俊秀", "廉洁",
            "留恋", "前进", "清秀", "热切",
            "如愿", "生动", "圣洁", "舒畅",
            "爽朗", "顽强", "旺盛", "鲜艳",
            "羡慕", "享受", "雄厚", "秀丽",
            "永恒", "优雅", "有利", "赞成",
            "珍藏", "振作", "正直", "卓越"
        ]
        # 消极词表
        negativeWords = [
            "悲观", "别扭", "嘲笑", "处罚",
            "丢失", "堵塞", "罚款", "烦恼",
            "孤单", "黑暗", "胡涂", "怀疑",
            "慌忙", "假冒", "焦躁", "禁止",
            "沮丧", "懒惰", "浪费", "冷笑",
            "鲁莽", "落后", "闷热", "排斥",
            "轻率", "穷苦", "缺乏", "撒谎",
            "伤心", "失意", "损害", "逃避",
            "消沉", "心慌", "厌恶", "忧虑",
            "郁闷", "杂乱", "争吵", "自卑"
        ]
    ImageComponent endPracA_p
      image = pic\AffEndPrac.png
      saveStartStop = False
      size = (1.33, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent respEndPracA
      allowedKeys = 'p','q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intervals
    CodeComponent code_js_1
      Code Type = JS
      Begin JS Routine:
        fixTime = Math.random(times);
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        times = [0.3,0.5,0.4,0.35,0.45]
    TextComponent text
      letterHeight = 0.1
      ori = 0.6
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = $fixTime
      text = +
      units = height
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    TextComponent blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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Flow
  Routine GeneInstr
  LoopInitiator returnPractice loopType="TrialHandler"
    loopType = sequential
    nReps = 99
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    Routine instrNum
    LoopInitiator pracNum loopType="TrialHandler"
      conditionsFile = NumPractise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'target': '2A', '反应类型': 1, '条件': 1, 'truetarget': 'A', 'CorAns': 'a', 'Position': [0.2, 0.2]},
        {'target': 'A9', '反应类型': 1, '条件': 2, 'truetarget': 'A', 'CorAns': 'a', 'Position': [-0.2, 0.2]},
        {'target': '7e', '反应类型': 2, '条件': 1, 'truetarget': 7.0, 'CorAns': 'a', 'Position': [-0.2, -0.2]},
        {'target': '9H', '反应类型': 2, '条件': 2, 'truetarget': 9.0, 'CorAns': 'a', 'Position': [0.2, -0.2]},
        {'target': 'h4', '反应类型': 1, '条件': 1, 'truetarget': 'h', 'CorAns': 'l', 'Position': [0.2, 0.2]},
        {'target': '4H', '反应类型': 1, '条件': 2, 'truetarget': 'H', 'CorAns': 'a', 'Position': [-0.2, 0.2]},
        {'target': 'F8', '反应类型': 2, '条件': 1, 'truetarget': 8.0, 'CorAns': 'l', 'Position': [-0.2, -0.2]},
        {'target': 'h7', '反应类型': 2, '条件': 2, 'truetarget': 7.0, 'CorAns': 'a', 'Position': [0.2, -0.2]},
        {'target': '5e', '反应类型': 1, '条件': 1, 'truetarget': 'e', 'CorAns': 'l', 'Position': [0.2, 0.2]},
        {'target': 'e8', '反应类型': 1, '条件': 2, 'truetarget': 'e', 'CorAns': 'l', 'Position': [-0.2, 0.2]},
        {'target': '4E', '反应类型': 2, '条件': 1, 'truetarget': 4.0, 'CorAns': 'l', 'Position': [-0.2, -0.2]},
        {'target': '5H', '反应类型': 2, '条件': 2, 'truetarget': 5.0, 'CorAns': 'a', 'Position': [0.2, -0.2]},
        {'target': '9E', '反应类型': 1, '条件': 1, 'truetarget': 'E', 'CorAns': 'a', 'Position': [0.2, 0.2]},
        {'target': 'h9', '反应类型': 1, '条件': 2, 'truetarget': 'h', 'CorAns': 'l', 'Position': [-0.2, 0.2]},
        {'target': '2a', '反应类型': 2, '条件': 1, 'truetarget': 2.0, 'CorAns': 'l', 'Position': [-0.2, -0.2]}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
      Routine num2Word
      Routine feedback
    LoopTerminator pracNum
    Routine endPracNum
  LoopTerminator returnPractice
  Routine inter
  LoopInitiator NumBlock1 loopType="TrialHandler"
    Selected rows = 0:80
    conditionsFile = NumCon.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target': '7h', '反应类型': 1, '条件': 1, 'truetarget': 'h', 'CorAns': 'l', 'Positon': [0.2, 0.2]},
      {'target': '8F', '反应类型': 1, '条件': 2, 'truetarget': 'F', 'CorAns': 'a', 'Positon': [-0.2, 0.2]},
      {'target': '8h', '反应类型': 2, '条件': 1, 'truetarget': 8.0, 'CorAns': 'l', 'Positon': [-0.2, -0.2]},
      {'target': 'a2', '反应类型': 2, '条件': 2, 'truetarget': 2.0, 'CorAns': 'l', 'Positon': [0.2, -0.2]},
      {'target': '8f', '反应类型': 1, '条件': 1, 'truetarget': 'f', 'CorAns': 'l', 'Positon': [0.2, 0.2]},
      {'target': '6a', '反应类型': 1, '条件': 2, 'truetarget': 'a', 'CorAns': 'l', 'Positon': [-0.2, 0.2]},
      {'target': 'h6', '反应类型': 2, '条件': 1, 'truetarget': 6.0, 'CorAns': 'l', 'Positon': [-0.2, -0.2]},
      {'target': 'f9', '反应类型': 2, '条件': 2, 'truetarget': 9.0, 'CorAns': 'a', 'Positon': [0.2, -0.2]},
      {'target': 'E4', '反应类型': 1, '条件': 1, 'truetarget': 'E', 'CorAns': 'a', 'Positon': [0.2, 0.2]},
      {'target': '6e', '反应类型': 1, '条件': 2, 'truetarget': 'e', 'CorAns': 'l', 'Positon': [-0.2, 0.2]},
      {'target': '5G', '反应类型': 2, '条件': 1, 'truetarget': 5.0, 'CorAns': 'a', 'Positon': [-0.2, -0.2]},
      {'target': 'h3', '反应类型': 2, '条件': 2, 'truetarget': 3.0, 'CorAns': 'a', 'Positon': [0.2, -0.2]},
      {'target': '9e', '反应类型': 1, '条件': 1, 'truetarget': 'e', 'CorAns': 'l', 'Positon': [0.2, 0.2]},
      {'target': 'a8', '反应类型': 1, '条件': 2, 'truetarget': 'a', 'CorAns': 'l', 'Positon': [-0.2, 0.2]},
      {'target': 'e8', '反应类型': 2, '条件': 1, 'truetarget': 8.0, 'CorAns': 'l', 'Positon': [-0.2, -0.2]}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
    Routine num2Word
  LoopTerminator NumBlock1
  Routine restNum
  LoopInitiator NumBlock2 loopType="TrialHandler"
    Selected rows = 80:160
    conditionsFile = NumCon.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target': '7h', '反应类型': 1, '条件': 1, 'truetarget': 'h', 'CorAns': 'l', 'Positon': [0.2, 0.2]},
      {'target': '8F', '反应类型': 1, '条件': 2, 'truetarget': 'F', 'CorAns': 'a', 'Positon': [-0.2, 0.2]},
      {'target': '8h', '反应类型': 2, '条件': 1, 'truetarget': 8.0, 'CorAns': 'l', 'Positon': [-0.2, -0.2]},
      {'target': 'a2', '反应类型': 2, '条件': 2, 'truetarget': 2.0, 'CorAns': 'l', 'Positon': [0.2, -0.2]},
      {'target': '8f', '反应类型': 1, '条件': 1, 'truetarget': 'f', 'CorAns': 'l', 'Positon': [0.2, 0.2]},
      {'target': '6a', '反应类型': 1, '条件': 2, 'truetarget': 'a', 'CorAns': 'l', 'Positon': [-0.2, 0.2]},
      {'target': 'h6', '反应类型': 2, '条件': 1, 'truetarget': 6.0, 'CorAns': 'l', 'Positon': [-0.2, -0.2]},
      {'target': 'f9', '反应类型': 2, '条件': 2, 'truetarget': 9.0, 'CorAns': 'a', 'Positon': [0.2, -0.2]},
      {'target': 'E4', '反应类型': 1, '条件': 1, 'truetarget': 'E', 'CorAns': 'a', 'Positon': [0.2, 0.2]},
      {'target': '6e', '反应类型': 1, '条件': 2, 'truetarget': 'e', 'CorAns': 'l', 'Positon': [-0.2, 0.2]},
      {'target': '5G', '反应类型': 2, '条件': 1, 'truetarget': 5.0, 'CorAns': 'a', 'Positon': [-0.2, -0.2]},
      {'target': 'h3', '反应类型': 2, '条件': 2, 'truetarget': 3.0, 'CorAns': 'a', 'Positon': [0.2, -0.2]},
      {'target': '9e', '反应类型': 1, '条件': 1, 'truetarget': 'e', 'CorAns': 'l', 'Positon': [0.2, 0.2]},
      {'target': 'a8', '反应类型': 1, '条件': 2, 'truetarget': 'a', 'CorAns': 'l', 'Positon': [-0.2, 0.2]},
      {'target': 'e8', '反应类型': 2, '条件': 1, 'truetarget': 8.0, 'CorAns': 'l', 'Positon': [-0.2, -0.2]}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
    Routine num2Word
  LoopTerminator NumBlock2
  LoopInitiator returnPrac loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine AffInstr
    LoopInitiator PracAff loopType="TrialHandler"
      conditionsFile = AFFPrac.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'congruency': 0, 'AffValue': 1, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker1.png', 'corAnsF': 'l', 'corAnsA': 'a'},
        {'congruency': 0, 'AffValue': 0, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker2.png', 'corAnsF': 'a', 'corAnsA': 'l'},
        {'congruency': 0, 'AffValue': 1, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker2.png', 'corAnsF': 'a', 'corAnsA': 'a'},
        {'congruency': 0, 'AffValue': 0, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker1.png', 'corAnsF': 'l', 'corAnsA': 'l'},
        {'congruency': 1, 'AffValue': 1, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker3.png', 'corAnsF': 'a', 'corAnsA': 'a'},
        {'congruency': 1, 'AffValue': 0, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker4.png', 'corAnsF': 'l', 'corAnsA': 'l'},
        {'congruency': 1, 'AffValue': 1, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker4.png', 'corAnsF': 'l', 'corAnsA': 'a'},
        {'congruency': 1, 'AffValue': 0, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker3.png', 'corAnsF': 'a', 'corAnsA': 'l'}]
      Routine intervals
      Routine AFF_S1
      Routine AFF_S2
    LoopTerminator PracAff
    Routine endPracAff
  LoopTerminator returnPrac
  LoopInitiator AffBlocks loopType="TrialHandler"
    conditionsFile = AffLoop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'RestPic': 'AffRest1.png'},
      {'RestPic': 'AffRest2.png'},
      {'RestPic': 'AffRest3.png'},
      {'RestPic': 'EndExp.PNG'}]
    LoopInitiator AffBlock1 loopType="TrialHandler"
      conditionsFile = AFFcon.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'congruency': 0, 'AffValue': 1, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker1.png', 'corAnsF': 'l', 'corAnsA': 'a'},
        {'congruency': 0, 'AffValue': 0, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker2.png', 'corAnsF': 'a', 'corAnsA': 'l'},
        {'congruency': 0, 'AffValue': 1, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker2.png', 'corAnsF': 'a', 'corAnsA': 'a'},
        {'congruency': 0, 'AffValue': 0, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker1.png', 'corAnsF': 'l', 'corAnsA': 'l'},
        {'congruency': 1, 'AffValue': 1, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker3.png', 'corAnsF': 'a', 'corAnsA': 'a'},
        {'congruency': 1, 'AffValue': 0, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker4.png', 'corAnsF': 'l', 'corAnsA': 'l'},
        {'congruency': 1, 'AffValue': 1, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker4.png', 'corAnsF': 'l', 'corAnsA': 'a'},
        {'congruency': 1, 'AffValue': 0, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker3.png', 'corAnsF': 'a', 'corAnsA': 'l'},
        {'congruency': 0, 'AffValue': 1, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker1.png', 'corAnsF': 'l', 'corAnsA': 'a'},
        {'congruency': 0, 'AffValue': 0, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker2.png', 'corAnsF': 'a', 'corAnsA': 'l'},
        {'congruency': 0, 'AffValue': 1, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker2.png', 'corAnsF': 'a', 'corAnsA': 'a'}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
      Routine intervals
      Routine AFF_S1
      Routine AFF_S2
    LoopTerminator AffBlock1
    Routine restAff
  LoopTerminator AffBlocks
