PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = AF_prime_test
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Routines
  Routine S1
    ImageComponent Flanker
      image [set every repeat] = $flankerPic
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      units = height
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    ImageComponent target
      image [set every repeat] = $targetPic
      size = (0.7, 0.7)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.0
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      correctAns = $corAnsF
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine S2
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # 积极词表
        positiveWords = ["名胜", "高贵", "优雅", "真理", "娴熟", "崇尚", "卓越", "精品", "廉洁", "端庄", "佳丽", "宴会", "甘甜", "海洋", "婚事", "鲜明", "充沛", "风光", "聘请", "增收"]

        # 消极词表
        negativeWords = [
            "孤独", "呻吟", "假装", "厌恶", "疑问",
            "慌忙", "丢脸", "怀疑", "责怪", "落后",
            "差别", "自卑", "可怜", "苍蝇", "废话",
            "伤害", "闲话", "固执", "胡涂", "忧虑"
        ]
      Begin Routine:
        if AffValue == 1: # 积极词条件
            thisWord = random.choice(positiveWords)
            positiveWords.remove(thisWord)
        else:
            thisWord = random.choice(negativeWords)
            negativeWords.remove(thisWord)
    TextComponent affectiveWords
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $thisWord
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','l'
      correctAns = $corAnsA
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine instr
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 1
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 2
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator Conflict loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'congruency': 0, 'AffValue': 1, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker1.png', 'corAnsF': 'l', 'corAnsA': 'a'},
      {'congruency': 0, 'AffValue': 0, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker2.png', 'corAnsF': 'a', 'corAnsA': 'l'},
      {'congruency': 0, 'AffValue': 1, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker2.png', 'corAnsF': 'a', 'corAnsA': 'a'},
      {'congruency': 0, 'AffValue': 0, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker1.png', 'corAnsF': 'l', 'corAnsA': 'l'},
      {'congruency': 1, 'AffValue': 1, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker3.png', 'corAnsF': 'a', 'corAnsA': 'a'},
      {'congruency': 1, 'AffValue': 0, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker4.png', 'corAnsF': 'l', 'corAnsA': 'l'},
      {'congruency': 1, 'AffValue': 1, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker4.png', 'corAnsF': 'l', 'corAnsA': 'a'},
      {'congruency': 1, 'AffValue': 0, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker3.png', 'corAnsF': 'a', 'corAnsA': 'l'},
      {'congruency': 0, 'AffValue': 1, 'flankerPic': 'pics/flanker5.png', 'targetPic': 'pics/flanker1.png', 'corAnsF': 'l', 'corAnsA': 'a'},
      {'congruency': 0, 'AffValue': 0, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker2.png', 'corAnsF': 'a', 'corAnsA': 'l'},
      {'congruency': 0, 'AffValue': 1, 'flankerPic': 'pics/flanker6.png', 'targetPic': 'pics/flanker2.png', 'corAnsF': 'a', 'corAnsA': 'a'}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
    Routine S1
    Routine S2
  LoopTerminator Conflict
  Routine end
