PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['您的名称(不必实名)'], expName, expInfo['date'])
  Experiment info = {'您的名称(不必实名)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = test_Num2Word
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Routines
  Routine num2Word
    ImageComponent frame
      image = frame.png
      saveStartStop = False
      size = (1.2, 1.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    TextComponent stimulus
      letterHeight = 0.1
      pos [set every repeat] = Position
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4.5
      text [set every repeat] = $target
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    KeyboardComponent respNum2word
      allowedKeys = 'a','l'
      correctAns = $CorAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4.5
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if respNum2word.corr:
            feedbacktext = "√"
            feedbackcolor = "green"
        else:
            feedbacktext = "×"
            feedbackcolor = "red"
  Routine feedback
    ImageComponent frame2
      image = frame.png
      saveStartStop = False
      size = (1.2, 1.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    TextComponent textFBNum
      color [set every repeat] = $feedbackcolor
      letterHeight = 0.1
      pos [set every repeat] = Position
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedbacktext
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  Routine inter
    ImageComponent frame3
      image = frame.png
      saveStartStop = False
      size = (1.2, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine endPracNum
    ImageComponent NumEndPrac
      image = pic\pic5.PNG
      saveStartStop = False
      size = (1.33, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent respEndNumP
      allowedKeys = 'q','p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if key_resp_6.keys == "p":
            returnPractice.finished = True # 循环结束
        else:
            returnPractice.finished = False
  Routine instrNum
    ImageComponent image_instr
      image = pic\pic1.PNG
      saveStartStop = False
      size = (1.33, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent respNumPrac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine restNum
    KeyboardComponent respRest
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent NumRest
      image = pic\pic6.PNG
      saveStartStop = False
      size = (1.33, 1)
      startVal [time (s)] = 0.0
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  Routine End
    ImageComponent Endexp
      image = pic\pic7.PNG
      saveStartStop = False
      size = (1.33,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent respEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator returnPractice loopType="TrialHandler"
    loopType = sequential
    nReps = 99
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    Routine instrNum
    LoopInitiator pracNum loopType="TrialHandler"
      conditionsFile = practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'target': 'h8', '反应类型': 1, '条件': 1, 'truetarget': 'h', 'CorAns': 'a', 'Position': (0.2, 0.2)},
        {'target': '7h', '反应类型': 1, '条件': 2, 'truetarget': 'h', 'CorAns': 'a', 'Position': (-0.2, 0.2)},
        {'target': '7H', '反应类型': 2, '条件': 1, 'truetarget': 7.0, 'CorAns': 'a', 'Position': (-0.2, -0.2)},
        {'target': '9a', '反应类型': 2, '条件': 2, 'truetarget': 9.0, 'CorAns': 'a', 'Position': (0.2, -0.2)},
        {'target': 'F4', '反应类型': 1, '条件': 1, 'truetarget': 'F', 'CorAns': 'l', 'Position': (0.2, 0.2)},
        {'target': '7e', '反应类型': 1, '条件': 2, 'truetarget': 'e', 'CorAns': 'a', 'Position': (-0.2, 0.2)},
        {'target': '8F', '反应类型': 2, '条件': 1, 'truetarget': 8.0, 'CorAns': 'l', 'Position': (-0.2, -0.2)},
        {'target': '5H', '反应类型': 2, '条件': 2, 'truetarget': 5.0, 'CorAns': 'a', 'Position': (0.2, -0.2)},
        {'target': 'e7', '反应类型': 1, '条件': 1, 'truetarget': 'e', 'CorAns': 'a', 'Position': (0.2, 0.2)},
        {'target': 'h4', '反应类型': 1, '条件': 2, 'truetarget': 'h', 'CorAns': 'a', 'Position': (-0.2, 0.2)},
        {'target': 'H2', '反应类型': 2, '条件': 1, 'truetarget': 2.0, 'CorAns': 'l', 'Position': (-0.2, -0.2)},
        {'target': 'A8', '反应类型': 2, '条件': 2, 'truetarget': 8.0, 'CorAns': 'l', 'Position': (0.2, -0.2)},
        {'target': '4E', '反应类型': 1, '条件': 1, 'truetarget': 'E', 'CorAns': 'l', 'Position': (0.2, 0.2)},
        {'target': 'E2', '反应类型': 1, '条件': 2, 'truetarget': 'E', 'CorAns': 'l', 'Position': (-0.2, 0.2)},
        {'target': '9f', '反应类型': 2, '条件': 1, 'truetarget': 9.0, 'CorAns': 'a', 'Position': (-0.2, -0.2)}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
      Routine num2Word
      Routine feedback
    LoopTerminator pracNum
    Routine endPracNum
  LoopTerminator returnPractice
  Routine inter
  LoopInitiator NumBlock1 loopType="TrialHandler"
    Selected rows = 0:80
    conditionsFile = mainbody.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target': '7h', '反应类型': 1, '条件': 1, 'truetarget': 'h', 'CorAns': 'l'},
      {'target': '8F', '反应类型': 1, '条件': 2, 'truetarget': 'F', 'CorAns': 'a'},
      {'target': '8h', '反应类型': 2, '条件': 1, 'truetarget': 8.0, 'CorAns': 'l'},
      {'target': 'a2', '反应类型': 2, '条件': 2, 'truetarget': 2.0, 'CorAns': 'l'},
      {'target': '8f', '反应类型': 1, '条件': 1, 'truetarget': 'f', 'CorAns': 'l'},
      {'target': '6a', '反应类型': 1, '条件': 2, 'truetarget': 'a', 'CorAns': 'l'},
      {'target': 'h6', '反应类型': 2, '条件': 1, 'truetarget': 6.0, 'CorAns': 'l'},
      {'target': 'f9', '反应类型': 2, '条件': 2, 'truetarget': 9.0, 'CorAns': 'a'},
      {'target': 'E4', '反应类型': 1, '条件': 1, 'truetarget': 'E', 'CorAns': 'a'},
      {'target': '6e', '反应类型': 1, '条件': 2, 'truetarget': 'e', 'CorAns': 'l'},
      {'target': '5G', '反应类型': 2, '条件': 1, 'truetarget': 5.0, 'CorAns': 'a'},
      {'target': 'h3', '反应类型': 2, '条件': 2, 'truetarget': 3.0, 'CorAns': 'a'},
      {'target': '9e', '反应类型': 1, '条件': 1, 'truetarget': 'e', 'CorAns': 'l'},
      {'target': 'a8', '反应类型': 1, '条件': 2, 'truetarget': 'a', 'CorAns': 'l'},
      {'target': 'e8', '反应类型': 2, '条件': 1, 'truetarget': 8.0, 'CorAns': 'l'},
      {'target': '3f', '反应类型': 2, '条件': 2, 'truetarget': 3.0, 'CorAns': 'a'},
      {'target': '7f', '反应类型': 1, '条件': 1, 'truetarget': 'f', 'CorAns': 'l'},
      {'target': 'a7', '反应类型': 1, '条件': 2, 'truetarget': 'a', 'CorAns': 'l'},
      {'target': '5A', '反应类型': 2, '条件': 1, 'truetarget': 5.0, 'CorAns': 'a'},
      {'target': '8g', '反应类型': 2, '条件': 2, 'truetarget': 8.0, 'CorAns': 'l'},
      {'target': '9a', '反应类型': 1, '条件': 1, 'truetarget': 'a', 'CorAns': 'l'}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
    Routine num2Word
  LoopTerminator NumBlock1
  Routine restNum
  LoopInitiator NumBlock2 loopType="TrialHandler"
    Selected rows = 80:160
    conditionsFile = mainbody.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine num2Word
  LoopTerminator NumBlock2
  Routine End
